CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channel": "none", "FileLocation": "none", "Frame": "none", "Image": "none", "ImageNo": "text", "Line": "text", "Marker": "text", "Processing1": "none", "Processing2": "none", "Replicate": "text", "Series": "none"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Celltype>.*)_(?P<Replicate>.*)_(?P<Target>.*)_(?P<ImageNumber>.*)_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "tif") (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:InputRescale
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:InputRescale
    Name the primary objects to be identified:Spheroid
    Typical diameter of objects, in pixel units (Min,Max):400,1400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:8
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.01,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Spheroid
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:8|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notes:['To get the foreground area using CellProfiler, one must first divide by one image dimension…']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
    Name the output measurement:SpheroidPxOverWidth
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Spheroid
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Width_DAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Rounded to a specified number of decimal places
    Enter how many decimal places the value should be rounded to:5
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:9|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notes:['…and then by the other dimension, because total # of pixels/total area is not an option.']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
    Name the output measurement:SpheroidArea
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Spheroid
    Select the numerator measurement:Math_SpheroidPxOverWidth
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Height_DAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Rounded to a specified number of decimal places
    Enter how many decimal places the value should be rounded to:5
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:InputRescale
    Name the output image:InputOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F39D
    Select objects to display:Spheroid

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:InputOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<Celltype>_\g<Replicate>_\g<Target>_\g<ImageNumber>_perimeter
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    Saved file format:png
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Spheroid|Math_SpheroidArea
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Spheroid
    Combine these object measurements with those of the previous object?:No
    File name:\g<Celltype>_\g<Replicate>_\g<Target>_\g<ImageNumber>.csv
    Use the object name for the file name?:No
