CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"CellLine": "text", "Celltype": "text", "Channel": "text", "FileLocation": "none", "Frame": "none", "Identifier": "text", "Image": "none", "ImageNo": "none", "ImageNumber": "text", "Line": "none", "Marker": "none", "Processing": "text", "Processing1": "none", "Processing2": "none", "Replicate": "text", "Series": "none", "Target": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Celltype>.*)_(?P<Replicate>.*)_(?P<Target>.*)_(?P<ImageNumber>.*)_(?P<Channel>.*)_(?P<Processing>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does contain "Tubulin")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file doesnot contain "DAPI") (file doesnot contain "TUBULIN")
    Name to assign these images:Target
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Determine the boundary (perimeter) of the spheroid.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Spheroid
    Typical diameter of objects, in pixel units (Min,Max):400,1400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:8
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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notes:['Measure the spheroid’s size and shape. Required for max radius, which is used later on to generate images showing distance bins.']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
    Select object sets to measure:Spheroid
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MaskImage:[module_num:7|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notes:['Generate a masked image that eliminates any staining not coming from within the identified spheroid.']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
    Select the input image:DAPI
    Name the output image:Masked_DAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:Spheroid
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    Invert the mask?:No

MaskImage:[module_num:8|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notes:['Generate a masked image that eliminates any staining not coming from within the identified spheroid.']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
    Select the input image:Target
    Name the output image:Masked_Target
    Use objects or an image as a mask?:Objects
    Select object for mask:Spheroid
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    Invert the mask?:No

MaskImage:[module_num:9|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notes:['Generate a masked image that eliminates any staining not coming from within the identified spheroid.']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
    Select the input image:Tubulin
    Name the output image:Masked_Tubulin
    Use objects or an image as a mask?:Objects
    Select object for mask:Spheroid
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Use DAPI channel to identify nuclei using the masked DAPI image.']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
    Select the input image:Masked_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:15
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:11|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notes:['Expand nuclei to approximate cell borders.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Masked_DAPI
    Number of pixels by which to expand the primary objects:6
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
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
RelateObjects:[module_num:12|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notes:['Determine the distance from the centroid of each identified cell object to the closest point on the spheroid’s perimeter.']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
    Parent objects:Spheroid
    Child objects:Cells
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:13|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notes:['Divide the distances calculated in the previous step by the max radius, which effectively rescales them as a fractional distance (FracDist) from centre (0) to edge (1) of the spheroid. Since CellProfiler doesn’t allow variable inputs for upper and lower limits when binning (see ClassifyObjects), this approach accommodates concentric division for any size of spheroid.']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
    Name the output measurement:FracDist
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Distance_Minimum_Spheroid
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Spheroid
    Select the denominator measurement:AreaShape_MaximumRadius
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ClassifyObjects:[module_num:14|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notes:['Allocate identified cell objects according to their associated FracDist value. Stores an image where each of the binned cell populations is given a unique colour, according to the default colormap in settings. Certain colourmaps may perform better or worse depending on the desired number of bins.']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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Cells
    Select the measurement to classify by:Math_FracDist
    Select bin spacing:Evenly spaced bins
    Number of bins:6
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:Yes
    Name the output image:CellsByDist
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    Name the output objects:ClassifiedObjects
    Select the object name:ValidCells
    Select the first measurement:Math_FracDist
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:No

MeasureObjectIntensity:[module_num:15|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notes:['Measure staining intensity for each channel within the boundaries of each identified cell object.']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
    Select images to measure:Masked_DAPI, Masked_Target, Masked_Tubulin
    Select objects to measure:Cells

OverlayOutlines:[module_num:16|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notes:['For quality control, this step and the next build an image using the masked DAPI image, object outlines (spheroid and cells), and the colour-coded image for FracDist classification. This step adds the object outlines.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Masked_DAPI
    Name the output image:SpheroidCellsOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF8000
    Select objects to display:Spheroid
    Select outline color:#FFFFFF
    Select objects to display:Cells

ImageMath:[module_num:17|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notes:['For quality control, this step and the previous one build an image using the masked DAPI image, object outlines (spheroid and cells), and the colour-coded image for FracDist classification. This step adds the colour-coded FracDist overlay.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:FinalDistClassAndCellAndSpheroidOverlay
    Image or measurement?:Image
    Select the first image:CellsByDist
    Multiply the first image by:0.25
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    Image or measurement?:Image
    Select the second image:SpheroidCellsOutlines
    Multiply the second image by:0.5
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
SaveImages:[module_num:18|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notes:['Saves the overlay image generated over the previous 2 steps.']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
    Select the type of image to save:Image
    Select the image to save:FinalDistClassAndCellAndSpheroidOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<Celltype>_\g<Replicate>_\g<Target>_\g<ImageNumber>_BinOverlay
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    Saved file format:png
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:19|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notes:['Exports extracted data as a .csv file. By default, we have selected to export only integrated density; in the next pipeline (Python), this allows us to determine the total staining intensity for each channel in each region of interest, simplifying normalization and minimizing the impact of outliers. If you are interested, for instance, in the frequency of high-staining cells as opposed to overall patterns of staining intensity, we recommend developing a modified strategy.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Intensity_IntegratedIntensity_Masked_Target,Cells|Intensity_IntegratedIntensity_Masked_Tubulin,Cells|Intensity_IntegratedIntensity_Masked_DAPI,Cells|Distance_Minimum_Spheroid
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<Celltype>_\g<Replicate>_\g<Target>_\g<ImageNumber>_measurements.csv
    Use the object name for the file name?:No
